OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)

Time signal
  Sampling frequency = 10
  Generated epoch sample count = 1
-> Signal to TCP
  Port = 5680
  Output format = Raw

Sinus oscillator => #2
  Channel count = 16
  Sampling frequency = 128
  Generated epoch sample count = 32
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#2 -> Signal to TCP
  Port = 5678
  Output format = Raw
#2 -> Spectral Analysis => #5
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#5.Amplitude -> Instant Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 0.05
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
